PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = TestWebGazer
  logging level = debug
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Routines
  Routine CalibrateGazeTracker
    CodeComponent webgazer_calibrate
      Code Type = JS
      Begin JS Routine:
        var calibrationPoints = [
            new TargetPoint(0.5,0.5),
            new TargetPoint(0.25, 0.25),
            new TargetPoint(0.75, 0.25),
            new TargetPoint(0.25, 0.75),
            new TargetPoint(0.75, 0.75),
            new TargetPoint(0.5,0.05),
            new TargetPoint(0.95,0.05),
            new TargetPoint(0.95,0.5),
            new TargetPoint(0.95,0.95),
            new TargetPoint(0.5,0.95),
            new TargetPoint(0.05,0.95),
            new TargetPoint(0.05,0.5),
            new TargetPoint(0.05,0.05),
         ];

        var calibrate = new Targets(calibrationPoints, 'calibration', 5);
        calibrate.start();
        console.log("calibrated");
        webgazer.setRegression('ridge');

        webgazer.setGazeListener(function(data,clock) {
            if(data==null) {
                return;
            } else if (isNaN(data.x) || isNaN(data.y)) {
                webgazer.trainModel();
                return;
            }
            xprediction = data.x;
            yprediction = data.y;
        });

        var setup = function() {
          // Set up the main canvas. The main canvas is used to calibrate the webgazer.
          var canvas = document.getElementById("plotting_canvas");
          canvas.width = window.innerWidth;
          canvas.height = window.innerHeight;
          canvas.style.position = 'fixed';

          thisExp.addData("innerWidth", window.innerWidth);
          thisExp.addData("innerHeight", window.innerHeight);

        };

        function checkIfReady() {
          if (webgazer.isReady()) {
              setup();
              console.log("ready");
          } else {
              setTimeout(checkIfReady, 100);
              console.log("notready")
          }
        }

        setTimeout(checkIfReady,100);
      End JS Routine:
        webgazer.params.showVideo = false;
        webgazer.params.mirrorVideo = false;
        webgazer.params.showFaceOverlay = false;
        webgazer.params.showFaceFeedbackBox = false;
        webgazer.params.showGazeDot = false;
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ShowGazeTarget
    PolygonComponent polygon
      fillColor = red
      lineColor = red
      nVertices = 50
      pos [set every repeat] = xpos, ypos
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent webgazer_test
      Code Type = JS
      Begin JS Routine:
        // reset gazeArray
        gazeArray = [];
      Each JS Frame:
        //gazeArray.push([1000*t,(xprediction-win_width)/win_width,(win_height-yprediction)/win_height])
        gazeArray.push([1000*t,xprediction,yprediction])
        console.log(xprediction + "," + yprediction)
      End JS Routine:
        // save gaze data
        thisExp.addData('gazeArray', gazeArray);
  Routine WaitForNextTrial
    TextComponent txt_wait
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Press the <spacebar> when you are ready to start the next trial.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StartTask_3
    TextComponent StartTask
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This task calibrates and tests the eye-tracking system.
        Please get a tape measure before you start, then you will:

        1. Measure vewing distance
        2. Measure screen height
        3. Calibrate eye tracker
        4. Test eye tracker

        Press the <spacebar> to begin.
    KeyboardComponent kbd_start_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_init
      Code Type = JS
      Begin JS Experiment:
        /* For WebGazer */
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;

        /* FOR WEBGAZER
        //paste in head
        <link rel="stylesheet" type="text/css" href="css/style.css">
        <link rel="stylesheet" href="node_modules/bootstrap/dist/css/bootstrap.min.css">
        <link rel="stylesheet" type="text/css" href="css/targets.css">
        <script src="./js/targets.js" type="text/javascript" ></script>
        <script src="./node_modules/sweetalert/dist/sweetalert.min.js"></script>
        <script src="./js/webgazer.js"></script>

        //paste in body
        <canvas id="plotting_canvas" width="500" height="500" style="cursor:crosshair;"></canvas>
        */
      End JS Experiment:
        webgazer.end();
      End JS Routine:
        // Start the gaze tracking
        gazeArray = [];
  Routine ScaleScreen
    TextComponent text_top
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      wrapWidth = 1.5
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    ImageComponent card_image
      image = bank-1300155_640.png
      size [set every frame] = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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    CodeComponent image_update
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin Routine:
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm\nY Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the <spacebar> when done'
            card_image.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
  Routine EnterDistance
    TextComponent distance
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Please enter the distance from your eyes to the screen, in inches (decimals are ok).

        Note that a comfortable distance is typically 20–40 inches.

        After you enter the number, press <return> to continue.
    TextComponent input_distance
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent line_distance
      fillColor = black
      lineColor = black
      pos = (0, -0.15)
      shape = line
      size = (0.3, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent parse_distance
      Code Type = JS
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      Begin JS Routine:
        modify = false;
        input_distance.text = "";
        event.clearEvents("keyboard");
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys(["1", "2", "3", "4", "5", "6", "7", "8", "9", "0", "period", "return", "backspace"]);
        if (keys.length) {
            if (_pj.in_es6("backspace", keys)) {
                input_distance.text = input_distance.text.slice(0, (- 1));
            } else {
                if (_pj.in_es6("return", keys)) {
                    continueRoutine = false;
                } else {
                    if (_pj.in_es6("period", keys)) {
                        input_distance.text = (input_distance.text + ".");
                    } else {
                        input_distance.text = (input_distance.text + keys[0]);
                    }
                }
            }
        }
      End JS Routine:
        thisExp.addData("distance", Number.parseFloat(input_distance.text));
  Routine WaitForCalibration
    TextComponent text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Once the eye-tracking test video appears
        in the upper left-hand corner of the screen,
        press the <spacebar> to begin calibration
    KeyboardComponent kbd_wait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent webgazer_setup
      Code Type = JS
      Begin JS Experiment:
        // Useful variables
        win_width = psychoJS.window.size[0];
        win_height = psychoJS.window.size[1];
        xprediction = 0;
        yprediction = 0;
      Begin JS Routine:
        // Start Webgazer
        webgazer.begin();
        webgazer.clearData();

        // save window size
        psychoJS.experiment.addData('win_width', psychoJS.window.size[0]);
        psychoJS.experiment.addData('win_height', psychoJS.window.size[1]);
  Routine EnterHeight
    TextComponent height
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Please enter the height of the viewable portion of your screen, in inches (decimals are ok).


        After you enter the number, press <return> to continue.
    TextComponent input_height
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent line_height
      fillColor = black
      lineColor = black
      pos = (0, -0.15)
      shape = line
      size = (0.3, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent parse_height
      Code Type = JS
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      Begin JS Routine:
        modify = false;
        input_height.text = "";
        event.clearEvents("keyboard");
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys(["1", "2", "3", "4", "5", "6", "7", "8", "9", "0", "period", "return", "backspace"]);
        if (keys.length) {
            if (_pj.in_es6("backspace", keys)) {
                input_height.text = input_height.text.slice(0, (- 1));
            } else {
                if (_pj.in_es6("return", keys)) {
                    continueRoutine = false;
                } else {
                    if (_pj.in_es6("period", keys)) {
                        input_height.text = (input_height.text + ".");
                    } else {
                        input_height.text = (input_height.text + keys[0]);
                    }
                }
            }
        }
      End JS Routine:
        thisExp.addData("height", Number.parseFloat(input_height.text));
Flow
  Routine StartTask_3
  Routine EnterDistance
  Routine EnterHeight
  Routine WaitForCalibration
  Routine CalibrateGazeTracker
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    LoopInitiator RandomizePosition loopType="TrialHandler"
      conditionsFile = gazeConditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'xpos': 0.5, 'ypos': 0.5},
        {'xpos': 0.25, 'ypos': 0.25},
        {'xpos': 0.25, 'ypos': 0.75},
        {'xpos': 0.75, 'ypos': 0.25},
        {'xpos': 0.75, 'ypos': 0.75}]
      Routine ShowGazeTarget
    LoopTerminator RandomizePosition
    Routine WaitForNextTrial
  LoopTerminator trials
